\\ Amy VI NR Program
\\ Started 01-29-2016
\\ By Michael A. Kausch
\\ Features: VI Schedule of Reinforcement on 20-value Fleshler-Hoffman Progression (no subject response necessary for administration of rewards)
\\ VI Commences once cues finish being issued
\\ Set VI in Macro
\\ Set Cue in macro (stim light, sonalert, or both)
\\ Active / Inactive Responses recorded in bins 10 seconds before cue and during cue
\\ Active / Inactive Response rates recorded in bins for the 10second interval before cue and during cue
\\ 10 second before cue is adjusted in the event an interval is less than 10 seconds
\\ 5/7/21       UPDATE
\\ changed filename to VT Program so that the name is correct (LOL)
\\ rewrote nose poke logic to be functional in "level" input mode
\\ refactored stim light and sonalert state sets to be one state set
\\ added comments because there really weren't any


\\Inputs
^LeftPoke = 1
^RightPoke = 2
^MiddlePoke = 3

\\Outputs
^LStimLight = 1
^RStimLight = 2
^HouseLight = 3
^Pump = 4
^Sonalert = 5
^Red = 6
^Yellow = 7
^Green  = 8

\A Control Variables
^SessionDuration = 0   \ session duration in centiseconds
^VIMean = 1  \ mean value for the VI array
^ActivePoke = 2 \ 1 for left and 2 for right
^CueType = 3 \ 1 for sonalert, 2 for stimulus light, 3 for both
^CueDuration = 4 \ duration of cue in centiseconds
^PumpDuration    = 5    \ pump duration in centiseconds
^InactivePoke    = 6    \ program auto sets this variable to be the inactive lever based on macro input of A(2)
\^TimeOutDuration = 8 \ time of post-VI timeout in centiseconds


\B  Data Array
^Rewards = 0
^ActB4Cue = 1
^InactB4Cue = 2
^ActCue    = 3
^InactCue = 4
^ActTotal = 5
^InactTotal = 6

\C  IRT Array
\    (-1) Act Poke B4 Cue
\    (-2) Inact Poke B4 Cue
\    (-3) Reward Issued
\     (-5) denotes new VI active
\    (-6) Act Poke during Cue
\    (-7) Inact Poke during Cue
\	(-8) Act Poke BB4Q
\ 	(-9) Inact Poke BB4Q

\D  Current VI Time Variable
\E   Error Array
\F
\G   Cue Duration (0 for BBQ (before before cue), 1 for BQ (before cue))
\H
\I   C Array Counter
\J
\K   VI Array
\L    ActRsp during cue bin
\M  InactRsp during cue bin
\N   Variable Reward Timer Array
\O
\P  Act Rsp before cue Bin
\Q  Inact Rsp before cue Bin
\R  
\S  Bin Counter
\T
^SessionTimer  = 0
^VITimer       = 1
^CueTimer       = 2
^PumpTimer        = 3
^BQTimer        = 4
^
\^BinTimer       = 6
\^TimeOutTimer    = 7

\U actrsp before cue rate
\V actrsp during cue rate
\W Partial Beam Break Counter
\X
\Y
\Z   Signals
^Z_End = 1
^Z_Reward = 2
^Z_VIStart = 3
\^Z_TimeOut = 4


DIM A=6
DIM C=10000
DIM B=6
DIM T=5
DIM G=1
DIM P=1000
DIM Q=1000
DIM L=1000
DIM M=1000
DIM U=1000
DIM V=1000



LIST K = 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20

\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\
\\\\\\\\\ Session Clock  \\\\\\\\\\\\\\\\\\
\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\

S.S.1,

S1,\\ Wait for macro to initialize variables

#Start: ---> S2

S2,

0.01": ADD T(^SessionTimer); IF T(^SessionTimer) >= A(^SessionDuration) [@End, @cont]
                                @End: Z^Z_End ---> S3
                                @Cont: ---> SX
S3,

3": ---> STOPABORTFLUSH

\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\
\\\\\\\\\\\\\ VT Control \\\\\\\\\\\\\\\\\
\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\

S.S.2,

S1,

0.01":  ---> S2

S2,

\\ initiallizes constant probability array. The mean of the array is set in the macro as A(^VIMean) and the list is set to var K. 
\\ -5 is entered into the C array to denote a new VIT is starting. Counter S is used to increment vars P,Q,L,S,U and V
\\ writes session duration into C array, issues the VI_Start Z signal, sets inactive lever


#Start: INITCONSTPROBARR K,A(^VIMean); RANDI D = K; SET C(I)=-5, S=1;
            SET P(S+1)=-987.987, Q(S+1)=-987.987, L(S+1)=-987.987, M(S+1)=-987.987, U(S+1)=-987.987, V(S+1)=-987.987;
            ADD I; SET C(I)=T(^SessionDuration); ADD I; SET C(I)=-987.987; Z^Z_VIStart; IF A(^ActivePoke)=1 [@left, @right]
                                                                                            @left: SET A(^InactivePoke) = 2 ---> S3
                                                                                            @right: SET A(^InactivePoke) = 1 ---> S3

S3,  

\\ inrements VITimer ever 0.01 seconds and checks if the timer has passed D (the current VIT)
\\ if it passes the VIT, issue a reward, reset the timer, enters -3 for a reward issued into C array and write the time that it occured
\\ draws new VIT from K array and sets it as D and enters this information into the C array

0.01": ADD T(^VITimer); IF T(^VITimer) >= D  [@VIOver]
                @VIOver: Z^Z_Reward; ADD B(^Rewards); SET T(^VITimer)=0;
                                    SET C(I)=-3; ADD I; SET C(I)=T(^SessionDuration); ADD I; SET C(I)=-987.987;
                                    RANDI D = K; SET C(I)=-5; ADD I; SET C(I)=T(^SessionDuration); ADD I; SET C(I)=-987.987  ---> S4

S4, \\ wait for rewards to finish. Once it receives a VIStart Z-signal it starts the next VITimer

#Z^Z_VIStart: ---> S3


\\S5, 
\\\ Time-out before next VI
\\ Time Out removed from program but the code is left incase Dr. G wants the feature added back in

\\0.01": ADD T(^TimeOutTimer); IF T(^TimeOutTimer)>= A(^TimeOutDuration) [@TimeOutOver]
\\            @TimeOutOver:   ---> S3



\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\
\\\\\\\\\\\ Nose Poke CTRL \\\\\\\\\\\\\\\
\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\


S.S.3,

\\ Relavent Variables: 
\\ G(0) is BBQ Cue duration
\\ G(1) is BQ Cue duration
\\ D is the Current VI Time Variable
\\ A(^CueDuration) is the duration that the Cue's are active for

\\ The purpose of this control system is to count and differentiate responses during the cue presentation 
\\ before the reward is issued. 
\\ 
\\ Checks to see if (VTI - CueDuration) is < 0
\\ If the CueDuration is longer than the VIT, then control is passed directly to S3 where nosepokes are incremented
\\ in the "Before Cue" B variables

\\ If the Cue Duration is longer than the VTI, control is passed to S2 where nose pokes are incremented in a
\\ "Before the Before the Cue" (BB4Q) time period. (This is actually a misnomer. Before the Reward and Before Before the reward
\\ fits better but I'm not going back and changing all those variable names)  
\\ Control is then sent to S3 where nose pokes are incremented in the "Before Cue" time period


S1,

#Z^Z_VIStart: IF D-A(^CueDuration)<0 [@skipcountdown, @countdownuntilrecording]
    @skip: SET G(1) = D ---> S3
    @countdown: SET G(0) = D-A(^CueDuration), G(1)=A(^CueDuration) ---> S2

S2,

#Z^Z_End: ---> S5
#RA(^ActivePoke): ADD W(1); IF W(1) >= 2 [@BeamBreak, @NoBeamBreak]
        @BeamBreak: ADD B(^ActTotal); SET C(I)=-8, W(1) = 0; ADD I; SET C(I)=T(^SessionDuration); ADD I; SET C(I)=-987.987 ---> S6
        @NoBreamBreak: ---> SX
#RA(^InactivePoke): ADD W(2); IF W(2) >=2 [@BeamBreak, @NoBeamBreak]
        @BeamBreak: ADD B(^InactTotal); SET C(I)=-9, W(2) = 0; ADD I; SET C(I)=T(^SessionDuration); ADD I; SET C(I)=-987.987 ---> S6
        @NoBeamBreak: ---> SX
0.01": ADD T(^BQTimer); IF T(^BQTimer)>= G(0) [SET T(^BQTimer) = 0, G(0)=0] ---> S3

S6,     \\      poke "catch" for S2 that is waiting for the rat to remove his head

#Z^Z_End: ---> S5
#RA(^ActivePoke): ---> S6
#RA(^InactivePoke): ---> S6

0.01": ADD T(^BQTimer), W(2); IF W(2) >= 2 [@NoBeamBreak, @BeamStillBroke]
        @NoBeamBreak: SET W(2) = 0 ---> S2
        @BeamStillBroke: IF T(^BQTimer)>= G(0) [SET T(^BQTimer) = 0, G(0)=0] ---> S7    // sends to S7 instead bc his nose is in the hole still

S3, \\ begin recording responses [cue duration] before reward issued (or as soon as vi is decided in the event that it's less than 10 seconds)

#Z^Z_End: ---> S5
#Z^Z_Reward: ---> S4
#RA(^ActivePoke): ADD B(^ActTotal), B(^ActB4Cue), P(S); ARITHMETICMEAN P(0)=P,1,S; SET C(I)=-1; ADD I; SET C(I)=T(^SessionDuration); ADD I; SET C(I)=-987.987 ---> SX
#RA(^InactivePoke): ADD B(^InactTotal), B(^InactB4Cue), Q(S); ARITHMETICM

S7, 

\\ Poke "catch" for S3 that is waiting for the rat to remove his head from the nose poke hole

0.02": ---> S3
#Z^Z_End: ---> S5
#Z^Z_Reward: ---> S4
#RA(^ActivePoke): ---> S7
#RA(^InactivePoke): ---> S7


S4, \\ begin recording responses while cues have been issued

#Z^Z_End: ---> S5
#Z^Z_VIStart: SET U(S)=P(S)/G(1), V(S)=L(S)/G(1); ARITHMETICMEAN U(0)=U,1,S; ARITHMETICMEAN V(0)=V,1,S;
                                    ADD S; SET P(S)=0, P(S+1)=-987.987, Q(S)=0, Q(S+1)=-987.987, L(S)=0, L(S+1)=-987.987, M(S)=0, M(S+1)=-987.987, U(S)=0, U(S+1)=-987.987, V(S)=0, V(S+1)=-987.987;
                                    IF D-A(^CueDuration)<0 [@skipcountdown, @countdownuntilrecording]
                                                        @skip: SET G(1) = D ---> S3
                                                        @countdown: SET G(0) = D-A(^CueDuration), G(1)=A(^CueDuration) ---> S2
#RA(^ActivePoke): ADD W(1); IF W(1) >= 2 [@NosePoke]
        @NosePoke: ADD B(^ActTotal), B(^ActCue), L(S); ARITHMETICMEAN L(0)=L,1,S; SET C(I)=-6, W(1) = 0; ADD I; SET C(I)=T(^SessionDuration); ADD I; SET C(I)=-987.987 ---> S8
#RA(^InactivePoke): ADD W(2); IF W(2) >=2 [@NosePoke]
        @NosePoke: ADD B(^InactTotal), B(^InactCue), M(S); ARITHMETICMEAN M(0)=M,1,S; SET C(I)=-7, W(2) = 0; ADD I; SET C(I)=T(^SessionDuration); ADD I; SET C(I)=-987.987 ---> S8


S8,

0.02": ---> S4
#Z^Z_End: ---> S5
#RA(^ActivePoke): ---> S8
#RA(^InactivePoke): ---> S8


\S5,

\0.01":  SET U(S)=P(S)/G(1), V(S)=L(S)/G(1); ARITHMETICMEAN U(0)=U,1,S, V(0),V,1,S ---> SX


\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\
\\\\\\\\\\\\\\\\ Left Nose Poke CTRL \\\\\\\\\\\\\\\
\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\






\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\ 
\\\\\\\\\\\\ Cue Control \\\\\\\\\\\\\\
\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\

S.S.4,

\\ checks to see if sonalert or stimlite are active in the macro, if so the stateset advances to S2 where it will be looking for the Z_Reward Z-signal
\\ turns rewards on based on current setting of A(^CueType)
\\ Issues a VI_Start Z-signal after the completion of the stimulus light


S1,

#START: IF A(^CueType) > 0 [] ---> S2


S2,

#Z^Z_Reward: IF A(A^CueType) = 1 [@SonalertOnly, @Next]
        @SonalertOnly: ON ^Sonalert ---> S3
        @next:  IF A(^CueType) = 3 [@StimLiteOnly, @Next]
                @StimLiteOnly: ON A(^ActivePoke) ---> S3
                @Nexy: IF A(^CueType) = 3 [ON ^Sonalert, A(^ActivePoke) ---> S3]

S3,

0.01": ADD T(^CueTimer); IF T(^CueTimer) >= A(^CueDuration) [@end]
        @end: OFF ^Sonalert; SET T(^CueTimer)=0; Z^Z_VIStart ---> S2                                                                                                                                                                        


\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\
\\\\\\\\\\\\\\\ Pump \\\\\\\\\\\\\\\\\
\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\

\\ The Pump will always be active in this program
\\ if A(^CueType) is set to 0, it will send the z signal after the pump duration
\\ Pump durations are usually very short (< 1sec) so it will yield sending VIStart Z signal to the cue control 
\\ unless the stim lite and sonalert are both deactivated

S.S.6,

S1,

#START: IF A(^CueType) = 0 [@pumponly, @cue]
        @pump: ---> S4
        @cue: ---> S2

S2,

#Z^Z_Reward: ON ^Pump ---> S3

S3,

0.01": ADD T(^PumpTimer); IF T(^PumpTimer) >= A(^PumpDuration) [OFF ^Pump; SET T(^PumpTimer)=0] ---> S2

S4,

#Z^Z_Reward: ON ^Pump ---> S5

S5,

0.01": ADD T(^PumpTimer); IF T(^PumpTimer) >= A(^PumpDuration) [OFF ^Pump; SET T(^PumpTimer)=0; Z^Z_VIStart] ---> S4



\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\
\\\\\\\\\\\\\ SHOW COMMANDS \\\\\\\\\\\\\\
\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\

S.S.7,

S1,

0.01":     SHOW 1,Session Time,T(^SessionTimer), 2,Current Interval,D, 3,Interval Timer,T(^VITimer), 4,BQ Duration,G(0), 5,BQ Timer,T(^BQTimer);
        SHOW 6,Active Total,B(^ActTotal), 7,Act B4Q,B(^ActB4Cue), 8,Act During Q,B(^ActCue), 10,Rewards,B(^Rewards);
        SHOW 11,Inactive Total,B(^InactTotal), 12,Inact B4Q,B(^InactB4Cue), 13,Inact During Q,B(^InactCue);
        SHOW 16,ActRsp B4Q Bin,P(S), 17,ActRsp B4Q Mean,P(0), 18,ActRsp DurQ Bin,L(S), 19,ActRsp DurQ Mean,L(0);
        SHOW 21,InactRsp B4Q Bin,Q(S), 22,InactRsp B4Q Mean,Q(0), 23,InactRsp DurQ Bin,M(S), 24,InactRsp DurQ Mean,M(0);
        SHOW 26,B4Q Rate,U(S), 27,B4Q Rate Mean,U(0), 28,DurQ Rate,V(S), 29,DurQ Rate Mean,V(0) ---> SX

        \\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\
\\\\\\\\\\\\\\\ BIN CTRL \\\\\\\\\\\\\\\\\ ***************COMMENTED OUT
\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\

\S.S.8,

\S1,

\#Start: IF A(^BinDuration) > 0 [@calcbins, @nobin]
  \          @calcbins: SET P(S+1)=-987.987, Q(S+1)=-987.987, R(S+1)=-987.987 ---> S2
  \          @nobins: SET P(S)=-987.987, Q(S)=-987.987, R(S)=-987.987 ---> SX

\S2,

 \0.01": ADD T(^BinTimer); IF T(^BinTimer)>=A(^BinDuration) [@T]
  \               @T: ADD S; SET T(^BinTimer)=0, P(S)=0, P(S+1)=-987.987, Q(S)=0, Q(S+1)=-987.987 ---> S2

