\\ Within Session Dose Response
\\ Programmed by Mike Kausch
\\ Started: March 15, 2022
\\ Based off Amy FR Program v4
\\ TODO:
\\   -- implement an array for different pump durations


\\Inputs
^LeftNosePoke = 1
^RightNosePoke = 2

\\Outputs
^LeftStimLight = 1
^RightStimLight = 2
^HouseLight = 3
^Pump = 4

\\Variables
\A Array - Program Variables
^SessionDuration = 0 \ centiseconds
^ActivePoke = 1 \ set to 1 for left, 2 for right
^InactivePoke = 2 \ set automatically by the program depending on activepoke's setting
^FR = 3 \ Fixed Ratio Value
^MaxInf = 4 \ whole number values
^LightDuration = 5 \ centiseconds
^PumpDuration = 6 \ centiseconds
^TimeOut = 7
^BinDuration = 8
^Binnum = 9
^DoseChangeDuration = 10
^DoseBins = 11

\B Array - Data
^ActR = 0 \ counts responses to active side
^InactR = 1 \ counts responses to inactive side
^Inf = 2 \ counts infusions
^SessionEnd = 3
^InactRTO = 4
^ActRTO = 5
^ActTOT = 6	\ total active responses
^InactTOT = 7   \ total inactive responses


\C Array - IRT Array
\D Array - Binned Active Response TI Data Array
\E - error variable
\F Array - Binned Inactive Response TI Data Array
\G Array - Binned Reward Data Array
\H
\I - C Array Counter
\J - D Array Counter  (0=active, 1=inactive, 2=infusions, 3 = Component counter)
^DoseBin = 3 \ counts each dose component
\K - Active Response Counter
\L - Bin Counter Array
\M - Data Writer Variable
\N - Data Writer Variable
\O
\P Array - Binned Active TO Response Data Array
\Q Array - Binned Inactive TO Response Data Array
\R
\S
\T - Timer  Array
^SessionTimer = 0
^StimLightTimer = 1
^PumpTimer = 2
^TOTimer = 3
^BinTimer = 4
^DoseChangeTimer = 5
\U
\V
\W
\X
\Y
\Z-Signals
^Z_Start = 1
^Z_Reward = 2
^Z_TimeIn = 3
^Z_Stop = 4
^Z_Data = 5
^Z_StartBC = 6
^Z_FlushDoseBin = 7

DIM A = 12
DIM B = 8
DIM C = 99999
DIM D = 1000
DIM F = 1000
DIM G = 1000
DIM J = 4
DIM P = 1000
DIM Q = 1000
DIM T = 6



\\\\\\\\\\\\\\\\
\\Session Clock\\
\\\\\\\\\\\\\\\\\

S.S.1,

S1,

0.01": J(^DoseBin) = 0 ---> S2

S2,

#START: Z^Z_Start; Z^Z_StartBC ---> S3

S3,

0.01": ADD T(^SessionTimer); IF T(^SessionTimer) < A(^SessionDuration) [@True, @False]
    @T: ---> SX
    @F: ADD J(^DoseBin); SET B(^SessionEnd)=T(^SessionTimer); IF J(^DoseBin) > A(^DoseBins) [@True, @False]
            @T: ---> S4                        \\ end of session
            @F: Z^Z_FlushDoseBin ---> S5                 \\  send flush data signal

#Z^Z_Stop: SET B(^SessionEnd)=T(^SessionTimer) ---> S4

S4, \\ flush data and exit program
5": ---> STOPABORTFLUSH

S5, \\ flush data and continue
0.01": ADD T(^DoseChangeTimer); IF T(^DoseChangeTimer) < A(^DoseChangeDuration) [@True, #False]
    @T: ---> SX
    @F: Z^Z_TimeIn; Z^Z_StartBC ---> S3






\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\
\\\Time-Out / Time-In Control\\\
\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\

S.S.2,

S1,

#Z^Z_TimeIn: ON ^HouseLight ---> S2
#Z^Z_Start: ON ^HouseLight ---> S2

S2,

#Z^Z_FlushDoseBin: OFF ^HouseLight ---> S1
#Z^Z_Reward: OFF ^HouseLight ---> S3

S3,

#Z^Z_FlushDoseBin: SET T(^TOTimer) = 0 ---> S1
0.01": ADD T(^TOTimer); IF T(^TOTimer)>= A(^TimeOut) [@endTO, @cont]
    @end: SET T(^TOTimer) = 0; ON ^HouseLight; Z^Z_TimeIn ---> S2
    @cont: ---> SX




\\\\\\\\\\\\\\\\\\\\\\\\
\\Active Poke Responses\\
\\\\\\\\\\\\\\\\\\\\\\\\\

S.S.3,

S1,

#Z^Z_TimeIn: ---> S2
#Z^Z_Start: IF A(^ActivePoke) = 1 [@LeftActive, @continue]
    @Left: SET A(^InactivePoke) = 2 ---> S2
    @Cont: IF A(^ActivePoke) = 2 [@RightActive, @error]
        @Right: SET A(^InactivePoke) = 1 ---> S2
        @Error: SET E = 2.1; SHOW 1,error,E; Z^Z_Stop ---> S4

S2,  \\ During Time In

#Z^Z_FlushDoseBin: ---> S1
#Z^Z_Stop: ---> S4
#RA(^ActivePoke): ADD B(^ActR), B(^ActTOT), K; IF K=A(^FR) [@IssueReward, @Continue]
    @Reward: SET K=0; ADD B(^Inf); Z^Z_Reward; IF B(^Inf)=A(^Maxinf) [@end, @cont]
        @End: Z^Z_Stop ---> S4
        @Cont: ---> S3
    @Cont: ---> S2

S3,  \\ During Time Out

#Z^Z_FlushDoseBin: ---> S1
#Z^Z_Stop: ---> S4
#Z^Z_TimeIn: ---> S2
#RA(^ActivePoke): Add B(^ActRTO), B(^ActTOT) ---> SX

S4, \\ End of Program

0.01": ---> SX




\\\\\\\\\\\\\\\\\\\\\\\\\\
\\Inactive Poke Responses\\
\\\\\\\\\\\\\\\\\\\\\\\\\\\\

S.S.4,

S1,

#Z^Z_TimeIn: ---> S2
#Z^Z_Start: ---> S2

S2,

#Z^Z_FlushDoseBin: ---> S1
#Z^Z_Stop: ---> S3
#Z^Z_Reward: ---> S4
#RA(^InactivePoke): ADD B(^InactR), B(^InactTOT) ---> SX

S3,

0.01" ---> SX

S4,

#Z^Z_FlushDoseBin: ---> S1;
#Z^Z_Stop: ---> S3
#Z^Z_TimeIn: ---> S2
#RA(^InactivePoke): ADD B(^InactRTO), B(^InactTOT) ---> SX


\\\\\\\\\\\\\\\\\\\\\\\\\
\\Stimulus Light Control\\
\\\\\\\\\\\\\\\\\\\\\\\\\\\

S.S.5,

S1,

#Z^Z_Start: IF A(^LightDuration) >= 0 [@notzero, @zero]
    @notzero: ---> S2
     @zero: ---> SX

S2,

#Z^Z_Reward: ON A(^ActivePoke) ---> S3

S3,

#Z^Z_FlushDoseBin:  OFF A(^ActivePoke); SET T(^StimLightTimer)=0 ---> S2
0.01": ADD T(^StimLightTimer); IF T(^StimLightTimer) >= A(^LightDuration) [@Off, @cont]
    @Off: OFF A(^ActivePoke); SET T(^StimLightTimer)=0 ---> S2
    @cont: ---> SX

\\\\\\\\\\\\\\\\\\\\\\\\\
\\\Syringe Pump Control\\\
\\\\\\\\\\\\\\\\\\\\\\\\\\\

S.S.6,

S1,

#Z^Z_Start: IF A(^PumpDuration)>=0 [@notzero, @zero]
    @notzero: ---> S2
     @zero: ---> SX

S2,

#Z^Z_Reward: ON ^Pump ---> S3

S3,

0.01": ADD T(^PumpTimer); IF T(^PumpTimer) >= A(^PumpDuration) [@Off, @cont]
    @Off: OFF ^Pump; SET T(^PumpTimer)=0 ---> S2
    @cont: ---> SX


\\\\\\\\\\\\\\\\\\\\
\\\Response Writer\\\
\\\\\\\\\\\\\\\\\\\\\\

S.S.7,

S1,

#Z^Z_Start: ---> S2
#Z^Z_TimeIn: ---> S2

S2,

#Z^Z_FlushDoseBin: ---> S1
#Z^Z_Reward: ADD G(J(2)); SET C(M) = T(^SessionTimer); ADD M ---> S3
#RA(^ActivePoke): ADD D(J(0)); SET C(I) = T(^SessionTimer); ADD I; SET C(I) = -9; ADD I; SET C(I) = -987.987 ---> SX
#RA(^InactivePoke): ADD F(J(1)); SET C(I) = T(^SessionTimer); ADD I; SET C(I) = -4; ADD I; SET C(I) = -987.987 ---> SX


S3,

#Z^Z_FlushDoseBin: ---> S1
#Z^Z_TimeIn: ---> S2
#RA(^ActivePoke): ADD P(J(0)); SET C(I) = T(^SessionTimer); ADD I; SET C(I) = -8; ADD I; SET C(I) = -987.987 ---> SX
#RA(^InactivePoke): ADD Q(J(1)); SET C(I) = T(^SessionTimer); ADD I; SET C(I) = -3; ADD I; SET C(I) = -987.987 ---> SX




\\\\\\\\\\\\\\\\\\
\\\Show Commands\\\
\\\\\\\\\\\\\\\\\\\\

S.S.8,

S1,

0.01":     SHOW 1,Active Responses,B(^ActR);
    SHOW 2,Inactive Responses,B(^InactR);
    SHOW 3,Infusions,B(^Inf);
    SHOW 4,Session Time,T(^SessionTimer);
    SHOW 5,Time Remaining,((A(^SessionDuration)-T(^SessionTimer))/6000);
    SHOW 6,ActRsp TO,B(^ActRTO);
    SHOW 7,InactRsp TO,B(^InactRTO);
    SHOW 9,ActTOT,B(^ActTOT);
    SHOW 10,InactTOT,B(^InactTOT);
    SHOW 11,ACT BIN1,D(0);
    SHOW 12,ACT BIN2,D(1);
    SHOW 13,ACT BIN3,D(2);
    SHOW 16,INACT BIN1,F(0);
    SHOW 17,INACT BIN2,F(1);
    SHOW 18,INACT BIN3,F(2);
    SHOW 21,REW BIN1,G(0);
    SHOW 22,REW BIN2,G(1);
    SHOW 23,REW BIN3,G(2) ---> SX



\\\\\\\\\\\\\\\\\\\\\\\\\\\\
\\\Writing Data to C Array\\\
\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\

\\ need to send Z^Z_StartBC to send bincounter after flushing data


S.S.9,

S1,

#Z^Z_FlushDoseBin: FLUSH; SET B(0) = 0, B(1) = 0, B(2) = 0, B(3) = 0,
                        B(4) = 0, B(5) = 0, B(6) = 0, B(7) = 0 ---> SX




\\\\\\\\\\\\\\\\\
\\\Bin Control\\\
\\\\\\\\\\\\\\\\\

S.S.10,

S1,

#Z^Z_Start: IF A(^BinDuration) > 0 [@calcbins, @nobin]
            @calcbins: ---> S2
            @nobins: ---> SX

S2,
#Z^Z_Stop: SET D(J(0)+1) = -987.987, F(J(1)+1) = -987.987, G(J(2)+1) = -987.987, P(J(0)+1) = -987.987, Q(J(1)+1) = -987.987  ---> SX
#Z^Z_StartBC: SET D(J(0))=0, F(J(1))=0, G(J(2))=0, P(J(0))=0, Q(J(1))=0, L=1;
 		SET D(J(0)+A(^Binnum)+1) = -987.987; SET F(J(1)+A(^Binnum)+1) = -987.987; SET G(J(2)+A(^Binnum)+1) = -987.987;
		SET P(J(0)+A(^Binnum)+1) = -987.987; SET Q(J(1)+A(^Binnum)+1) = -987.987 ---> S3


S3,

#Z^Z_Stop: ADD J(0), J(1), J(2); SET D(J(0)+1) = -987.987, F(J(1)+1) = -987.987, G(J(2)+1) = -987.987;
            SET P(J(0)+1) = -987.987, Q(J(1)+1) = -987.987 ---> S2

#Z^Z_FlushDoseBin: ---> S4

0.01": ADD T(^BinTimer); IF T(^BinTimer) >= A(^BinDuration) [@end, @cont]
    @end: ADD J(0), J(1), J(2), L; IF L > A(^Binnum) [@end, @cont]
                        @end: SET L=0, D(J(0))=0, F(J(1))=0, G(J(2))=0, P(J(0))=0, Q(J(0))=0 ---> S2
                        @cont: SET D(J(0))=0, F(J(1))=0, G(J(2))=0, P(J(0))=0, Q(J(0))=0, T(^BinTimer)=0  ---> S3
    @cont: ---> S3

S4, // differentiate data and advance for next dosebin

0.01":  ADD J(0), J(1), J(2);
        SET D(J(0))=J(^DoseBin)*(-1111111), F(J(1))=J(^DoseBin)*(-1111111), G(J(2))=J(^DoseBin)*(-1111111),
                P(J(0))=J(^DoseBin)*(-1111111), Q(J(0))=J(^DoseBin)*(-1111111);
        ADD J(0), J(1), J(2) ---> S2
